PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = fMRItask_V2021.2.3.3_new
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Routines
  Routine fmriPulse
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Waiting for Scanner…
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        event.clearEvents()

        if myReps==0:
            continueRoutine=False
      Each Frame:
        allKeys = event.getKeys()
        if '5' in allKeys:
            if myReps==1:
                fmriTimer.reset()
                fmriTimer.getTime()
                thisExp.addData(f'BlockStart-{block_counter}-fmri',fmriTimer.getTime())
                continueRoutine = False
  Routine Welcome
    CodeComponent code_10
      Code Type = Py
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      Before Experiment:
        import random
      Begin Experiment:
        fmriTimer = core.Clock()
    ImageComponent image_3
      image = resources/welcome_scanner.png
      size = (1900, 1000)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions
    ImageComponent image
      image [set every frame] = $img_src
      size = (1450, 950)
      startVal [time (s)] = 0.0
      units = pix
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    CodeComponent code_2
      Code Type = Py
      Before Experiment:
        choice_imgs = ['resources/Slide16.png',
        'resources/Slide17.png',
        'resources/Slide18.png',
        'resources/Slide19.png',
        'resources/Slide20.png']

        gambling_imgs = ['resources/Slide34.png',
        'resources/Slide35.png',
        'resources/Slide36.png',
        'resources/Slide37.png',
        'resources/Slide38.png']
      Begin Routine:
        idx = 0
        event.clearEvents()
        if condition.thisN == 0:
            img_src = choice_imgs[idx]
        elif condition.thisN == 1:
            img_src = gambling_imgs[idx]
      Each Frame:
        keys = event.getKeys(keyList=['space'])

        if 'space' in keys:
            if condition.thisN == 0:
                if idx == len(choice_imgs)-1:
                    continueRoutine = False
                else:
                    idx+=1
                    img_src = choice_imgs[idx]
                    event.clearEvents()
            elif condition.thisN == 1:
                if idx == len(gambling_imgs)-1:
                    continueRoutine = False
                else:
                    idx+=1
                    img_src = gambling_imgs[idx]
                    event.clearEvents()
            else:
                print('NNnnnnnn')
  Routine tutorial
    ImageComponent tut_cue
      image [set every repeat] = $tutcue
      size = (1450, 950)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent tut_left
      image [set every repeat] = $tutleft
      pos = (-0.6, 0)
      size = (0.40, 0.40)
      startVal [time (s)] = 0.0
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    ImageComponent tut_center
      image [set every repeat] = $tutcenter
      size = (0.40, 0.40)
      startVal [time (s)] = 0.0
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    ImageComponent tut_right
      image [set every repeat] = $tutright
      pos = (0.6, 0)
      size = (0.40, 0.40)
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Py
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      Each Frame:
        keys = event.getKeys(keyList=['right','left','down'])

        if 'right' in keys:
            player_response = 'right'
            continueRoutine = False
        elif 'left' in keys:
            player_response = 'left'
            continueRoutine = False
        elif 'down' in keys:
            player_response = 'down'
            continueRoutine = False
  Routine tutorial_feedback
    ImageComponent tut_cue2
      image [set every repeat] = $tutcue
      size = (1450, 950)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent player
      lineWidth = 100
      shape = regular polygon...
      size = (0.40, 0.40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent tut_left2
      image [set every repeat] = $tutleft
      pos = (-0.6, 0)
      size = (0.40, 0.40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent tut_center2
      image [set every repeat] = $tutcenter
      size = (0.40, 0.40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent tut_right2
      image [set every repeat] = $tutright
      pos = (0.6, 0)
      size = (0.40, 0.40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_4
      Code Type = Py
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      Begin Routine:
        if player_response == 'left':
            player.setPos([-0.6,0])
        elif player_response == 'down':
            player.setPos([0,0])
        elif player_response == 'right':
            player.setPos([0.6,0])
  Routine tutorial_show
    ImageComponent tut_cue3
      image [set every repeat] = $tutcue
      size = (1450,950)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent player_3
      lineWidth = 100
      shape = regular polygon...
      size = (0.40, 0.40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent tut_left3
      image [set every repeat] = $tutleft
      pos = (-0.6, 0)
      size = (0.40, 0.40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent tut_center3
      image [set every repeat] = $tutcenter
      size = (0.40, 0.40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent tut_right3
      image [set every repeat] = $tutright
      pos = (0.6, 0)
      size = (0.40, 0.40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_5
      Code Type = Py
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      Begin Routine:

        if player_response == 'left':
            player_3.setPos([-0.6,0])
        elif player_response == 'down':
            player_3.setPos([0,0])
        elif player_response == 'right':
            player_3.setPos([0.6,0])

        if player_response == 'left' and tutAns=='stimLeft':
            player_3.lineColor = 'cyan'
        elif player_response == 'right' and tutAns=='stimRight':
            player_3.lineColor = 'cyan'
        elif player_response == 'down' and tutAns=='stimCenter':
            player_3.lineColor = 'cyan'
        else:
            player_3.lineColor = 'magenta'
  Routine condition_instructions
    CodeComponent initialize_and_assign
      Code Type = Py
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      Begin Experiment:
        trial_counter = 0
        cond_counter = 0
        block_counter = 1
        myReps = 0 # initialise variable
        choiceColor = 0.0000, 0.0000, 0.0000
        choicePos = []
      Begin Routine:
        if conditionBlock == 0: #rew-inst
            selected_rows = list(range(144))
            cond_ins_img = 'resources/remember_gambling.png'
        elif conditionBlock == 1: #perc-inst
            selected_rows = list(range(144,288))
            cond_ins_img = 'resources/remember_choice.png'
    KeyboardComponent key_resp_next
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent block2_run_orNot2Run
      Code Type = Py
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      End Routine:
        if trial_counter % 36 == 0: # second loop
            myReps = 1 # run
        else:
            myReps = 0 # no run

        cond_counter += 1

        thisExp.addData(f'ConditionStart-{conditionBlock}-fmri',fmriTimer.getTime())
    ImageComponent image_2
      image [set every repeat] = $cond_ins_img
      size = (1900, 1000)
      startVal [time (s)] = 0.0
      units = pix
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  Routine block
    CodeComponent block_toRun_orNotToRun
      Code Type = Py
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      Each Frame:
        if trial_counter % 36 == 0:
            myReps = 1 # run
        else:
            myReps = 0 # no run

        if myReps == 0:
            continueRoutine = False
    TextComponent block_Inst
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $'You are currently in Block ' + str(block_counter) + '. \nThere are 4 blocks in total.'
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    KeyboardComponent space_for_next
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine jitter1
    CodeComponent code_6
      Code Type = Py
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      Begin Experiment:
        jitter1_values = [x * 0.5 for x in range(int(2 * 2), int(7 * 2) + 1)]
      Begin Routine:
        jitter1_time = random.choice(jitter1_values)
        thisExp.addData('jitter1_duration-fmri',jitter1_time)
        jitter1_start = fmriTimer.getTime()
        thisExp.addData('jitter1_start-fmri',jitter1_start)
      End Routine:
        jitter1_stop = fmriTimer.getTime()
        thisExp.addData('jitter1_stop-fmri',jitter1_stop)
    TextComponent text_3
      durationEstim = 5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter1_time
      text = +
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  Routine trial
    ImageComponent blockImage
      image [set every repeat] = $blockImg
      size = (2000, 1200)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = pix
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    ImageComponent stimLeft
      image [set every repeat] = $stim1
      pos = (-0.5, 0)
      size = (0.40, 0.40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent stimCenter
      image [set every repeat] = $stim2
      size = (0.40, 0.40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent stimRight
      image [set every repeat] = $stim3
      pos = (0.5, 0)
      size = (0.40, 0.40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent progressFeedback
      fillColor = white
      pos = (0, -0.4)
      shape = rectangle
      size = (0.6, 0.13)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent progressFeedback_text
      color = black
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every frame] = $progressText
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    KeyboardComponent key_response
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent log_answer
      Code Type = Py
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      Begin Experiment:
        correct_counter = 0
        block_trial_counter = 0
        block_correct_counter = 0
        condition_correct_counter = 0
        condition_trial_counter = 0
        inst_key_pressed = 0
        corrAns = ''
        particSquare_opacity = 0
        pointText = ""
        pointStart = 0
        pointDur = 0
        pointPos = []
        partChoicePos = []
        pointHeight = 0.28
        left = -0.5
        right = 0.5
        partPointStart = 0
        partPointDur = 0
        rewardTot = 0.0
        perceptTot = 0.0
        progressText = ""
        bonusMoniez = 0.1
      Begin Routine:
        if conditionBlock == 0: #reward
            progressText = f"Bonus won so far: {rewardTot} EUR"
        elif conditionBlock == 1: #percept
            trial_progress = int(block_trial_counter/36*100)
            progressText = f"Trials completed so far: {trial_progress}%"

        event.clearEvents()


        trial_missed = False
        thisExp.addData('TrialStart-fmri',fmriTimer.getTime())
        event.clearEvents()
      End Routine:
        if conditionBlock == 0 or conditionBlock == 1 :
            if key_response.keys == '1':
               if corrAns1 == "stimLeft":
                  correct = 1
                  block_correct_counter += 1
                  block_trial_counter += 1
                  correct_counter += 1
                  trial_counter += 1
                  condition_correct_counter += 1
                  condition_trial_counter += 1
                  choicePos=[left,0]
                  pointPos=[left,pointHeight]
                  partChoicePos=[left,-0.25]
                  if conditionBlock == 0:
                    pointText = "+10 cents"
                    pointStart = 0
                    pointDur = 1
                    partPointStart = 0
                    partPointDur = 1
                  elif conditionBlock == 1:
                    pointText = "Correct"
                    pointStart = 0
                    pointDur = 1
                    partPointStart = 0
                    partPointDur = 1
               elif corrAns1 == "miss":
                  correct = 0
                  trial_counter += 1
                  block_trial_counter += 1
                  condition_trial_counter += 1
                  choicePos=[left,0]
                  pointPos=[left,pointHeight]
                  partChoicePos=[left,-0.25]
                  if conditionBlock == 0:
                    pointText = "0 cents"
                    pointStart = 0
                    pointDur = 1
                    partPointStart = 0
                    partPointDur = 1
                  elif conditionBlock == 1:
                    pointText = "Wrong"
                    pointStart = 0
                    pointDur = 1
                    partPointStart = 0
                    partPointDur = 1
            elif key_response.keys == '2':
                 if corrAns2 == "stimCenter":
                  correct = 1
                  block_correct_counter += 1
                  block_trial_counter += 1
                  correct_counter += 1
                  trial_counter += 1
                  condition_correct_counter += 1
                  condition_trial_counter += 1
                  choicePos=[0,0]
                  pointPos=[0,pointHeight]
                  partChoicePos=[0,-0.25]
                  if conditionBlock == 0:
                    pointText = "+10 cents"
                    pointStart = 0
                    pointDur = 1
                    partPointStart = 0
                    partPointDur = 1
                  elif conditionBlock == 1:
                    pointText = "Correct"
                    pointStart = 0
                    pointDur = 1
                    partPointStart = 0
                    partPointDur = 1
                 elif corrAns2 == "miss":
                   correct = 0
                   trial_counter += 1
                   block_trial_counter += 1
                   condition_trial_counter += 1
                   choicePos=[0,0]
                   pointPos=[0,pointHeight]
                   partChoicePos=[0,-0.25]
                   if conditionBlock == 0:
                    pointText = "0 cents"
                    pointStart = 0
                    pointDur = 1
                    partPointStart = 0
                    partPointDur = 1
                   elif conditionBlock == 1:
                    pointText = "Wrong"
                    pointStart = 0
                    pointDur = 1
                    partPointStart = 0
                    partPointDur = 1
            elif key_response.keys == '3':
                 if corrAns3 == "stimRight":
                  correct = 1
                  block_correct_counter += 1
                  block_trial_counter += 1
                  correct_counter += 1
                  trial_counter += 1
                  condition_correct_counter += 1
                  condition_trial_counter += 1
                  choicePos=[right,0]
                  pointPos=[right,pointHeight]
                  partChoicePos=[right,-0.25]
                  if conditionBlock == 0:
                    pointText = "+10 cents"
                    pointStart = 0
                    pointDur = 1
                    partPointStart = 0
                    partPointDur = 1
                  elif conditionBlock == 1:
                    pointText = "Correct"
                    pointStart = 0
                    pointDur = 1
                    partPointStart = 0
                    partPointDur = 1
                 elif corrAns3 == "miss":
                   correct = 0
                   trial_counter += 1
                   block_trial_counter += 1
                   condition_trial_counter += 1
                   choicePos=[right,0]
                   pointPos=[right,pointHeight]
                   partChoicePos=[right,-0.25]
                   if conditionBlock == 0:
                    pointText = "0 cents"
                    pointStart = 0
                    pointDur = 1
                    partPointStart = 0
                    partPointDur = 1
                   elif conditionBlock == 1:
                    pointText = "Wrong"
                    pointStart = 0
                    pointDur = 1
                    partPointStart = 0
                    partPointDur = 1
            else:
                block_trial_counter += 1
                condition_trial_counter += 1
                trial_counter += 1
                trial_missed = True
                correct = -1
                choicePos=[left,0]
                pointPos=[left,pointHeight]
                partChoicePos=[left,-0.25]


            inst_key_pressed = key_response.keys

        rewardTot = round(block_correct_counter * bonusMoniez,2)
        perceptTot = round(block_correct_counter/block_trial_counter*100,2)




        thisExp.addData('reward_Tot', rewardTot)
        thisExp.addData('current_condition', conditionBlock)
        thisExp.addData('correct_answer', correct)
        thisExp.addData('inst_key_pressed', inst_key_pressed)

        thisExp.addData('Respond-fmri',fmriTimer.getTime())
  Routine show_choice
    CodeComponent code_8
      Code Type = Py
      Begin Routine:
        if trial_missed :
            continueRoutine=False
    ImageComponent blockImage_3
      image [set every repeat] = $blockImg
      size = (2000, 1200)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    ImageComponent stimLeft_3
      image [set every repeat] = $stim1
      pos = (-0.5, 0)
      size = (0.40, 0.40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent stimCenter_3
      image [set every repeat] = $stim2
      size = (0.40, 0.40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent stimRight_3
      image [set every repeat] = $stim3
      pos = (0.5, 0)
      size = (0.40, 0.40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent partChoice
      lineWidth [set every repeat] = 100
      pos [set every repeat] = choicePos
      shape = regular polygon...
      size = (0.40, 0.40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent particYourChoice
      letterHeight = 0.05
      pos [set every repeat] = partChoicePos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Your Choice
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    PolygonComponent progresssFeedback_2
      fillColor = white
      pos = (0, -0.4)
      shape = rectangle
      size = (0.6, 0.13)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent progressFeedback_text_2
      color = black
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $progressText
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  Routine jitter2
    CodeComponent code_7
      Code Type = Py
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      Begin Experiment:
        jitter2_values =[x * 0.5 for x in range(int(1.5 * 2), int(6.5 * 2) + 1)]
      Begin Routine:
        if trial_missed:
            continueRoutine = False

        jitter2_time = random.choice(jitter2_values)
        thisExp.addData('jitter2_duration-fmri',jitter2_time)
        jitter2_start = fmriTimer.getTime()
        thisExp.addData('jitter2_start-fmri',jitter2_start)
      End Routine:
        jitter2_stop = fmriTimer.getTime()
        thisExp.addData('jitter2_stop-fmri',jitter2_stop)
    TextComponent text_4
      durationEstim = 5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter1_time
      text = +
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  Routine trial_feedback
    CodeComponent code_9
      Code Type = Py
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      Begin Routine:
        if trial_missed:
            continueRoutine = False

        if conditionBlock == 0:
            progressText = f"Bonus won so far: {rewardTot} EUR"
        elif conditionBlock == 1:
            trial_progress = int(block_trial_counter/36*100)
            progressText = f"Trials completed so far: {trial_progress}%"


        thisExp.addData('feedbackStart-fmri', fmriTimer.getTime())
      End Routine:
        thisExp.addData('feedbackStop-fmri', fmriTimer.getTime())
    ImageComponent blockImage_2
      image [set every repeat] = $blockImg
      size = (2000, 1200)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = pix
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    ImageComponent stimLeft_2
      image [set every repeat] = $stim1
      pos = (-0.5, 0)
      size = (0.40, 0.40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent stimCenter_2
      image [set every repeat] = $stim2
      size = (0.40, 0.40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent stimRight_2
      image [set every repeat] = $stim3
      pos = (0.5, 0)
      size = (0.40, 0.40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    PolygonComponent partChoice_2
      lineColor [set every repeat] = white
      lineWidth = 100
      pos [set every repeat] = choicePos
      shape = regular polygon...
      size = (0.40, 0.40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent particYourChoice_2
      color [set every repeat] = white
      letterHeight = 0.05
      pos [set every repeat] = partChoicePos
      startVal [time (s)] = partPointStart
      stopVal [duration (s)] = partPointDur
      text = Your Choice
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    PolygonComponent pointFeedback
      fillColor = white
      pos [set every repeat] = pointPos
      shape = rectangle
      size = (0.3, 0.13)
      startVal [time (s)] = pointStart
      stopVal [duration (s)] = pointDur
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    TextComponent pointFeedback_text
      color [set every repeat] = black
      letterHeight = 0.05
      pos [set every repeat] = pointPos
      startVal [time (s)] = pointStart
      stopVal [duration (s)] = pointDur
      text [set every repeat] = $pointText
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    PolygonComponent progressFeedback_3
      fillColor = white
      pos = (0, -0.4)
      shape = rectangle
      size = (0.6, 0.13)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent progressFeedback_text_3
      color = black
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $progressText
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  Routine block_feedback
    CodeComponent block_toRun_orNot2Run
      Code Type = Py
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      Begin Experiment:
        msg = ''
        block_accuracy = 0
        block_accuracy_full = 0
      Each Frame:
        if trial_counter % 36 == 0:
            myReps = 1 # run
        else:
            myReps = 0 # no run

        if myReps == 0:
            continueRoutine = False
    CodeComponent blockAccuracy
      Code Type = Py
      Begin Routine:
        if conditionBlock == 1 :
           block_accuracy = round(block_correct_counter/block_trial_counter*100,2)
           block_accuracy_full = block_correct_counter/block_trial_counter*100
           msg = f"Your accuracy was {block_accuracy}% during this block."
        elif conditionBlock == 0:
           block_accuracy = round(block_correct_counter/block_trial_counter*100,2)
           block_accuracy_full = block_correct_counter/block_trial_counter*100
           block_bonus = block_correct_counter * 0.10
           msg = f"Your accuracy was {block_accuracy}% during this block.\nYour bonus was {block_bonus} EUR during this block."
           thisExp.addData('participant_block_bonus', block_bonus)

        thisExp.addData('participant_block_accuracy', block_accuracy_full)
    TextComponent block_feedbackMsg
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $msg
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    CodeComponent reset_blockCounters
      Code Type = Py
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      Begin Routine:
        thisExp.addData('BlockfeedbackStart-fmri', fmriTimer.getTime())
      End Routine:
        if trial_counter % 36 == 0:
            block_counter += 1
            block_correct_counter = 0
            block_trial_counter = 0
            rewardTot = 0


        thisExp.addData('BlockfeedbackStop-fmri', fmriTimer.getTime())
  Routine condition_feedback
    CodeComponent condition_toRun_orNotToRun
      Code Type = Py
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      Begin Experiment:
        condMsg = ''
      Each Frame:
        if trial_counter % 144 == 0:
            condReps = 1 # run
        else:
            condReps = 0 # no run

        if condReps == 0:
            continueRoutine = False
    CodeComponent conditionAccuracy
      Code Type = Py
      Begin Experiment:
        conditionGame = ''
        condition_accuracy = 0
        condition_accuracy_full = 0
      Begin Routine:
        if conditionBlock == 0:
            conditionGame = "Gambling Challenge"
        elif conditionBlock == 1:
            conditionGame = "Choice Challenge"


        if conditionBlock == 1 :
           condition_accuracy = round(condition_correct_counter/condition_trial_counter*100,2)
           condition_accuracy_full = condition_correct_counter/condition_trial_counter*100
           condMsg = f"Your overall accuracy in the {conditionGame} was {condition_accuracy}%."
        elif conditionBlock == 0:
           condition_accuracy = round(condition_correct_counter/condition_trial_counter*100,2)
           condition_accuracy_full = condition_correct_counter/condition_trial_counter*100
           condition_bonus = condition_correct_counter * 0.10
           condMsg = f"Your overall accuracy in the {conditionGame} was {condition_accuracy}%.\nYour overall bonus was {condition_bonus} EUR. "
           thisExp.addData('participant_condition_bonus', condition_bonus)


        thisExp.addData('participant_condition_accuracy', condition_accuracy_full)
    TextComponent condition_feedbackAccuracy
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $condMsg
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    CodeComponent resetConditionCounters
      Code Type = Py
      End Routine:
        if trial_counter % 144 == 0: #end of a condition
            condition_correct_counter = 0
            condition_trial_counter = 0

        block_counter = 1
  Routine goodbye_screen
    CodeComponent test
      Code Type = Py
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      Begin Routine:
        thisExp.addData('endExperiment-fmri', fmriTimer.getTime())
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        This is the end of the experiment!

        Thanks for your participation
  Routine TrialMissed
    CodeComponent code_11
      Code Type = Py
      Begin Routine:
        if not trial_missed:
            continueRoutine=False
    ImageComponent bg
      image [set every repeat] = $blockImg
      size = (2000, 1200)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = pix
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    ImageComponent image_left
      image [set every repeat] = $stim1
      pos = (-0.5, 0)
      size = (0.40, 0.40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent image_right
      image [set every repeat] = $stim3
      pos = (0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent image_center
      image [set every repeat] = $stim2
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent text_6
      color = red
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = MISSED!
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Flow
  Routine Welcome
  LoopInitiator conditions loopType="TrialHandler"
    conditionsFile = conditionA_fMRI.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'conditionBlock': 0, 'instImg': 'resources/twoeyes.png', 'instText': 'You are in the reward instrumental condition'},
      {'conditionBlock': 1, 'instImg': 'resources/rock.png', 'instText': 'You are in the perceptual instrumental condition'}]
    Routine condition_instructions
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = $selected_rows
      conditionsFile = FMRI_finalStims_stimuli_iter_3.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'blockImg': 'resources/casino.png', 'stim1': 'resources/alien_yarn.png', 'stim2': 'resources/alien_blueberry.png', 'stim3': 'resources/alien_volcano.png', 'stim1prob': 0.5, 'stim2prob': 0.1, 'stim3prob': 0.9, 'normProb1': 0.3333333333333333, 'normProb2': 0.06666666666666667, 'normProb3': 0.6, 'corrAns1': 'miss', 'corrAns2': 'miss', 'corrAns3': 'stimRight', 'oldAlien': 'nochange', 'oldAlienIndex': 'nochange', 'newAlien': 'nochange', 'newAlienIndex': 'nochange', 'sentence': 'nochange'},
        {'blockImg': 'resources/casino.png', 'stim1': 'resources/alien_yarn.png', 'stim2': 'resources/alien_blueberry.png', 'stim3': 'resources/alien_volcano.png', 'stim1prob': 0.5, 'stim2prob': 0.1, 'stim3prob': 0.9, 'normProb1': 0.3333333333333333, 'normProb2': 0.06666666666666667, 'normProb3': 0.6, 'corrAns1': 'miss', 'corrAns2': 'miss', 'corrAns3': 'stimRight', 'oldAlien': 'nochange', 'oldAlienIndex': 'nochange', 'newAlien': 'nochange', 'newAlienIndex': 'nochange', 'sentence': 'nochange'},
        {'blockImg': 'resources/casino.png', 'stim1': 'resources/alien_volcano.png', 'stim2': 'resources/alien_yarn.png', 'stim3': 'resources/alien_blueberry.png', 'stim1prob': 0.9, 'stim2prob': 0.5, 'stim3prob': 0.1, 'normProb1': 0.6, 'normProb2': 0.3333333333333333, 'normProb3': 0.06666666666666667, 'corrAns1': 'stimLeft', 'corrAns2': 'stimCenter', 'corrAns3': 'stimRight', 'oldAlien': 'nochange', 'oldAlienIndex': 'nochange', 'newAlien': 'nochange', 'newAlienIndex': 'nochange', 'sentence': 'nochange'},
        {'blockImg': 'resources/casino.png', 'stim1': 'resources/alien_blueberry.png', 'stim2': 'resources/alien_yarn.png', 'stim3': 'resources/alien_volcano.png', 'stim1prob': 0.1, 'stim2prob': 0.5, 'stim3prob': 0.9, 'normProb1': 0.06666666666666667, 'normProb2': 0.3333333333333333, 'normProb3': 0.6, 'corrAns1': 'miss', 'corrAns2': 'stimCenter', 'corrAns3': 'stimRight', 'oldAlien': 'nochange', 'oldAlienIndex': 'nochange', 'newAlien': 'nochange', 'newAlienIndex': 'nochange', 'sentence': 'nochange'}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
      Routine block
      Routine fmriPulse
      Routine jitter1
      Routine trial
      Routine show_choice
      Routine TrialMissed
      Routine jitter2
      Routine trial_feedback
      Routine block_feedback
    LoopTerminator trials
    Routine condition_feedback
  LoopTerminator conditions
  Routine goodbye_screen
