PsychoPy2experiment version="2023.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine fmriPulse
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Waiting for Scanner…
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        fmriTimer = core.Clock()
      Begin Routine:
        event.clearEvents()
      Each Frame:
        allKeys = event.getKeys()
        if '5' in allKeys:
            fmriTimer.reset()
            scanOn=fmriTimer.getTime()
            thisExp.addData('ScanStart-fmri',scanOn)
            continueRoutine = False
  Routine Welcome
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    CodeComponent code_10
      Code Type = Py
      Begin Experiment:
        welcome_imgs = [

        'resources/fwelcome1.png',
        'resources/fwelcome2.png',
        'resources/fwelcome3.png',
        'resources/fwelcome4.png',
        'resources/fwelcome5.png',
        'resources/fwelcome6.png'
        ]

        img_idx = 0
        img_src = welcome_imgs[0]
      Each Frame:
        keys = event.getKeys(keyList=['space'])

        if 'space' in keys:

            if img_idx >= len(welcome_imgs)-1:
                continueRoutine = False
            else:
                img_idx+=1
                img_src = welcome_imgs[img_idx]
                event.clearEvents()
    ImageComponent image_3
      image [set every frame] = $img_src
      size = (1440, 900)
      startVal [time (s)] = 0.0
      units = pix
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  Routine instructions
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    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        tut_count = 0

        tut_imgs = []

        rew_inst_tut = [
        'resources/fgambling1.png',
        'resources/fgambling2.png',
        'resources/fgambling3.png',
        'resources/fgambling4.png'
        ]

        perc_inst_tut = [
        'resources/fchoice1.png',
        'resources/fchoice2.png',
        'resources/fchoice3.png',
        'resources/fchoice4.png'
        ]
      Begin Routine:
        if tut_count%10!=0:
            continueRoutine = False

        if conditionBlock == 0:
            tut_imgs = rew_inst_tut
        elif conditionBlock == 1:
            tut_imgs = perc_inst_tut


        tut_idx =0
        tut_src = tut_imgs[0]

        correct_counter = 0
        inst_key_pressed = 0
        corrAns = ''
        particSquare_opacity = 0
        pointText = ""
        pointStart = 0
        pointDur = 0
        pointPos = []
        partChoicePos = []
        pointHeight = 0.35
        left = -0.5
        right = 0.5
        partPointStart = 0
        partPointDur = 0
        tutrewardTot = 0.0
        tutperceptTot = 0.0
        tutprogressText = ""
        bonusMoniez = 0.1
      Each Frame:
        keys = event.getKeys(keyList=['space'])

        if 'space' in keys:

            if tut_idx >= len(tut_imgs)-1:
                continueRoutine = False
            else:
                tut_idx+=1
                tut_src = tut_imgs[tut_idx]
                event.clearEvents()
    ImageComponent image
      image [set every frame] = $tut_src
      size = (1440, 900)
      startVal [time (s)] = 0.0
      units = pix
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  Routine tutorial
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    ImageComponent tut_blockImage
      image [set every repeat] = $blockImg
      size = (2, 2)
      startVal [time (s)] = 0.0
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    ImageComponent tut_stimLeft
      image [set every repeat] = $stim1
      pos = (-0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0
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    ImageComponent tut_stimCenter
      image [set every repeat] = $stim2
      size = (0.4, 0.4)
      startVal [time (s)] = 0
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    ImageComponent tut_stimRight
      image [set every repeat] = $stim3
      pos = (0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0
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    PolygonComponent tut_progress_feedback_2
      fillColor = white
      pos = (0, -0.4)
      shape = rectangle
      size = (0.6, 0.13)
      startVal [time (s)] = 0.0
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    TextComponent tut_progress_feedback_text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $tutprogressText
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    KeyboardComponent tut_key_response
      allowedKeys = 'left','down','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent tut_log_answer
      Code Type = Py
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      Begin Experiment:
        correct_counter = 0
        condition_correct_counter = 0
        condition_trial_counter = 0
        inst_key_pressed = 0
        corrAns = ''
        particSquare_opacity = 0
        pointText = ""
        pointStart = 0
        pointDur = 0
        pointPos = []
        partChoicePos = []
        pointHeight = 0.25
        left = -0.5
        right = 0.5
        partPointStart = 0
        partPointDur = 0
        tutrewardTot = 0.0
        tutperceptTot = 0.0
        tutprogressText = ""
        bonusMoniez = 0.1
      Begin Routine:
        if conditionBlock == 0: #reward
            tutprogressText = f"Bonus won so far: {tutrewardTot} EUR"
        elif conditionBlock == 1: #percept
            trial_progress = int(trial_counter/10*100)
            tutprogressText = f"Trials completed so far: {trial_progress}%"

        event.clearEvents()
      End Routine:
        if conditionBlock == 0 or conditionBlock == 1 :
            if tut_key_response.keys == 'left':
               if corrAns1 == "stimLeft":
                  correct = 1
                  correct_counter += 1
                  trial_counter += 1
                  choicePos=[left,0]
                  pointPos=[left,pointHeight]
                  partChoicePos=[left,-0.25]
                  if conditionBlock == 0:
                    pointText = "+10 cents"
                    pointStart = 0
                    pointDur = 1.5
                    partPointStart = 0
                    partPointDur = 1.5
                  elif conditionBlock == 1:
                    pointText = "Correct"
                    pointStart = 0
                    pointDur = 1.5
                    partPointStart = 0
                    partPointDur = 1.5
               elif corrAns1 == "miss":
                  correct = 0
                  trial_counter += 1
                  choicePos=[left,0]
                  pointPos=[left,pointHeight]
                  partChoicePos=[left,-0.25]
                  if conditionBlock == 0:
                    pointText = "0 cents"
                    pointStart = 0
                    pointDur = 1.5
                    partPointStart = 0
                    partPointDur = 1.5
                  elif conditionBlock == 1:
                    pointText = "Wrong"
                    pointStart = 0
                    pointDur = 1.5
                    partPointStart = 0
                    partPointDur = 1.5
            elif tut_key_response.keys == 'down':
                 if corrAns2 == "stimCenter":
                  correct = 1
                  correct_counter += 1
                  trial_counter += 1
                  choicePos=[0,0]
                  pointPos=[0,pointHeight]
                  partChoicePos=[0,-0.25]
                  if conditionBlock == 0:
                    pointText = "+10 cents"
                    pointStart = 0
                    pointDur = 1.5
                    partPointStart = 0
                    partPointDur = 1.5
                  elif conditionBlock == 1:
                    pointText = "Correct"
                    pointStart = 0
                    pointDur = 1.5
                    partPointStart = 0
                    partPointDur = 1.5
                 elif corrAns2 == "miss":
                   correct = 0
                   trial_counter += 1
                   choicePos=[0,0]
                   pointPos=[0,pointHeight]
                   partChoicePos=[0,-0.25]
                   if conditionBlock == 0:
                    pointText = "0 cents"
                    pointStart = 0
                    pointDur = 1.5
                    partPointStart = 0
                    partPointDur = 1.5
                   elif conditionBlock == 1:
                    pointText = "Wrong"
                    pointStart = 0
                    pointDur = 1.5
                    partPointStart = 0
                    partPointDur = 1.5
            elif tut_key_response.keys == 'right':
                 if corrAns3 == "stimRight":
                    correct = 1
                    correct_counter += 1
                    trial_counter += 1
                    choicePos=[right,0]
                    pointPos=[right,pointHeight]
                    partChoicePos=[right,-0.25]
                    if conditionBlock == 0:
                        pointText = "+10 cents"
                        pointStart = 0
                        pointDur = 1.5
                        partPointStart = 0
                        partPointDur = 1.5
                    elif conditionBlock == 1:
                        pointText = "Correct"
                        pointStart = 0
                        pointDur = 1.5
                        partPointStart = 0
                        partPointDur = 1.5
                 elif corrAns3 == "miss":
                   correct = 0
                   trial_counter += 1
                   choicePos=[right,0]
                   pointPos=[right,pointHeight]
                   partChoicePos=[right,-0.25]
                   if conditionBlock == 0:
                    pointText = "0 cents"
                    pointStart = 0
                    pointDur = 1.5
                    partPointStart = 0
                    partPointDur = 1.5
                   elif conditionBlock == 1:
                    pointText = "Wrong"
                    pointStart = 0
                    pointDur = 1.5
                    partPointStart = 0
                    partPointDur = 1.5
            inst_key_pressed = tut_key_response.keys

        tutrewardTot = round(correct_counter * bonusMoniez,2)
        tutperceptTot = round(correct_counter/10*100,2)
        tut_count+=1
        thisExp.addData('tut_reward_Tot', tutrewardTot)
        thisExp.addData('tut_percept_Tot', tutperceptTot)
        thisExp.addData('tut_current_condition', conditionBlock)
        thisExp.addData('tut_correct_answer', correct)
        thisExp.addData('tut_inst_key_pressed', inst_key_pressed)
  Routine tutorial_feedback
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    CodeComponent tut_code
      Code Type = Py
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      Begin Routine:
        if conditionBlock == 0:
            tutprogressText = f"Bonus won so far: {tutrewardTot} EUR"
        elif conditionBlock == 1:
             trial_progress = int(trial_counter/10*100)
             tutprogressText = f"Trials completed so far: {trial_progress}%"
    ImageComponent tut_blockImage_2
      image [set every repeat] = $blockImg
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent tut_stimLeft_2
      image [set every repeat] = $stim1
      pos = (-0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    ImageComponent tut_stimCenter_2
      image [set every repeat] = $stim2
      size = (0.4, 0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    ImageComponent tut_stimRight_2
      image [set every repeat] = $stim3
      pos = (0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    PolygonComponent partChoice_2
      lineColor [set every repeat] = white
      lineWidth [set every repeat] = 100
      pos [set every repeat] = choicePos
      shape = rectangle
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    PolygonComponent tut_polygon
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 1.5
      pos [set every repeat] = pointPos
      shape = rectangle
      size = (0.3, 0.13)
      startVal [time (s)] = pointStart
      stopVal [duration (s)] = pointDur
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    TextComponent tut_reward_point_feedback
      color [set every repeat] = black
      letterHeight = 0.05
      pos [set every repeat] = pointPos
      startVal [time (s)] = pointStart
      stopVal [duration (s)] = pointDur
      text [set every repeat] = $pointText
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    TextComponent tut_particYourChoice
      color [set every repeat] = white
      letterHeight = 0.05
      pos [set every repeat] = partChoicePos
      startVal [time (s)] = partPointStart
      stopVal [duration (s)] = partPointDur
      text = Your choice
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    PolygonComponent tut_progress_feedback
      fillColor = white
      pos = (0, -0.4)
      shape = rectangle
      size = (0.6, 0.13)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent tut_progress_feedback_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $tutprogressText
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  Routine condition_instructions
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    CodeComponent initialize_and_assign
      Code Type = Py
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      Begin Experiment:
        cond_counter = 0
        myReps = 0 # initialise variable
        choiceColor = 0.0000, 0.0000, 0.0000
        choicePos = []
      Begin Routine:
        trial_counter = 0
        #conditionBlock=3

        if conditionBlock == 0: #rew-inst
            selected_tutorials = list(range(10))
        elif conditionBlock == 1: #perc-inst
            selected_tutorials = list(range(10,20))
    CodeComponent block2_run_orNot2Run
      Code Type = Py
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  Routine block
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    CodeComponent block_toRun_orNotToRun
      Code Type = Py
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      Each Frame:
        if trial_counter % 3 == 0:
            myReps = 1 # run
        else:
            myReps = 0 # no run

        if myReps == 0:
            continueRoutine = False
    TextComponent block_Inst
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $'You\'re currently in Block ' + str(block_counter) + '. There are 4 blocks in total. Press spacebar to enter the next block.'
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    KeyboardComponent space_for_next
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine jitter1
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    CodeComponent code_6
      Code Type = Py
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      Begin Routine:
        jitter1_time = randint(4,9)
        thisExp.addData('jitter1_duration-fmri',jitter1_time)
        jitter1_start = fmriTimer.getTime()
        thisExp.addData('jitter1_start-fmri',jitter1_start)
      End Routine:
        jitter1_stop = fmriTimer.getTime()
        thisExp.addData('jitter1_stop-fmri',jitter1_stop)
    TextComponent text_3
      durationEstim = 5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter1_time
      text = +
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  Routine trial
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    ImageComponent blockImage
      image [set every repeat] = $blockImg
      size = (1450, 950)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent stimLeft
      image [set every repeat] = $stim1
      pos = (-0.6, 0)
      size = (0.40, 0.40)
      startVal [time (s)] = 0.0
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    ImageComponent stimCenter
      image [set every repeat] = $stim2
      size = (0.40, 0.40)
      startVal [time (s)] = 0.0
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    ImageComponent stimRight
      image [set every repeat] = $stim3
      pos = (0.6, 0)
      size = (0.40, 0.40)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_response
      allowedKeys = 'left','down','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent log_answer
      Code Type = Py
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      Begin Experiment:
        correct_counter = 0
        block_trial_counter = 0
        block_correct_counter = 0
        condition_correct_counter = 0
        condition_trial_counter = 0
        pavlov_key_pressed = 0
        inst_key_pressed = 0
        corrAns = ''
      Begin Routine:
        thisExp.addData('TrialStart-fmri',fmriTimer.getTime())
        event.clearEvents()
      End Routine:
        if conditionBlock == 0 or conditionBlock == 1:
            if key_response.keys == 'left':
               if corrAns1 == "stimLeft":
                  correct = 1
                  block_correct_counter += 1
                  block_trial_counter += 1
                  correct_counter += 1
                  trial_counter += 1
                  condition_correct_counter += 1
                  condition_trial_counter += 1
                  choiceColor = 'cyan'
                  choicePos=[-0.6,0]
               elif corrAns1 == "miss":
                  correct = 0
                  choiceColor = 'magenta'
                  trial_counter += 1
                  block_trial_counter += 1
                  condition_trial_counter += 1
                  choicePos=[-0.6,0]
            elif key_response.keys == 'down':
                 if corrAns2 == "stimCenter":
                  correct = 1
                  block_correct_counter += 1
                  block_trial_counter += 1
                  correct_counter += 1
                  trial_counter += 1
                  condition_correct_counter += 1
                  condition_trial_counter += 1
                  choiceColor = 'cyan'
                  choicePos=[0,0]
                 elif corrAns2 == "miss":
                   correct = 0
                   choiceColor = 'magenta'
                   trial_counter += 1
                   block_trial_counter += 1
                   condition_trial_counter += 1
                   choicePos=[0,0]
            elif key_response.keys == 'right':
                 if corrAns3 == "stimRight":
                  correct = 1
                  block_correct_counter += 1
                  block_trial_counter += 1
                  correct_counter += 1
                  trial_counter += 1
                  condition_correct_counter += 1
                  condition_trial_counter += 1
                  choiceColor = 'cyan'
                  choicePos=[0.6,0]
                 elif corrAns3 == "miss":
                   correct = 0
                   choiceColor = 'magenta'
                   trial_counter += 1
                   block_trial_counter += 1
                   condition_trial_counter += 1
                   choicePos=[0.6,0]
            inst_key_pressed = key_response.keys

        thisExp.addData('current_condition', conditionBlock)
        thisExp.addData('correct_answer', correct)
        thisExp.addData('inst_key_pressed', inst_key_pressed)
        thisExp.addData('TrialEnd-fmri',fmriTimer.getTime())
  Routine show_choice
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    ImageComponent blockImage_3
      image [set every repeat] = $blockImg
      size = (1450, 950)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = pix
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    ImageComponent stimLeft_3
      image [set every repeat] = $stim1
      pos = (-0.6, 0)
      size = (0.40, 0.40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    ImageComponent stimCenter_3
      image [set every repeat] = $stim2
      size = (0.40, 0.40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    ImageComponent stimRight_3
      image [set every repeat] = $stim3
      pos = (0.6, 0)
      size = (0.40, 0.40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    PolygonComponent player_2
      lineWidth = 100
      shape = regular polygon...
      size = (0.40, 0.40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    CodeComponent code_8
      Code Type = Py
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      Begin Routine:
        if inst_key_pressed == 'left':
            player_2.setPos([-0.6,0])
        elif inst_key_pressed == 'down':
            player_2.setPos([0,0])
        elif inst_key_pressed == 'right':
            player_2.setPos([0.6,0])
  Routine jitter2
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    CodeComponent code_7
      Code Type = Py
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      Begin Routine:
        jitter2_time = randint(4,9)
        thisExp.addData('jitter2_duration-fmri',jitter2_time)
        jitter2_start = fmriTimer.getTime()
        thisExp.addData('jitter2_start-fmri',jitter2_start)
      End Routine:
        jitter2_stop = fmriTimer.getTime()
        thisExp.addData('jitter2_stop-fmri',jitter2_stop)
    TextComponent text_4
      durationEstim = 5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter1_time
      text = +
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  Routine trial_feedback
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    ImageComponent blockImage_2
      image [set every repeat] = $blockImg
      size = (1450, 950)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = pix
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    PolygonComponent choiceSquare
      lineColor [set every repeat] = $choiceColor
      lineWidth = 100
      pos [set every repeat] = $choicePos
      shape = regular polygon...
      size = (0.40, 0.40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    ImageComponent stimLeft_2
      image [set every repeat] = $stim1
      pos = (-0.6, 0)
      size = (0.40, 0.40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    ImageComponent stimCenter_2
      image [set every repeat] = $stim2
      size = (0.40, 0.40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    ImageComponent stimRight_2
      image [set every repeat] = $stim3
      pos = (0.6, 0)
      size = (0.40, 0.40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    CodeComponent code_9
      Code Type = Py
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      Begin Routine:
        thisExp.addData('feedbackStart-fmri', fmriTimer.getTime())
      End Routine:
        thisExp.addData('feedbackStop-fmri', fmriTimer.getTime())
  Routine block_feedback
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    CodeComponent block_toRun_orNot2Run
      Code Type = Py
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      Begin Experiment:
        msg = ''
      Each Frame:
        if trial_counter % 3 == 0:
            myReps = 1 # run
        else:
            myReps = 0 # no run

        if myReps == 0:
            continueRoutine = False
    CodeComponent blockAccuracy
      Code Type = Py
      Begin Routine:
        block_accuracy = block_correct_counter/block_trial_counter*100
        msg = f"Your accuracy was {block_accuracy}% during this block."
    TextComponent block_feedbackMsg
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $msg
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    CodeComponent reset_blockCounters
      Code Type = Py
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      Begin Routine:
        thisExp.addData('BlockfeedbackStart-fmri', fmriTimer.getTime())
      End Routine:
        if trial_counter % 3 == 0:
            block_counter += 1
            block_correct_counter = 0
            block_trial_counter = 0


        thisExp.addData('BlockfeedbackStop-fmri', fmriTimer.getTime())
  Routine condition_feedback
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    CodeComponent condition_toRun_orNotToRun
      Code Type = Py
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      Begin Experiment:
        condMsg = ''
      Each Frame:
        if trial_counter % 12 == 0:
            condReps = 1 # run
        else:
            condReps = 0 # no run

        if condReps == 0:
            continueRoutine = False
    CodeComponent conditionAccuracy
      Code Type = Py
      Begin Experiment:
        condition_accuracy = 0
    TextComponent condition_feedbackAccuracy
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $condMsg
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    CodeComponent resetConditionCounters
      Code Type = Py
      End Routine:
        if trial_counter % 12 == 0: #end of a condition
            condition_correct_counter = 0
            condition_trial_counter = 0

        block_counter = 1
  Routine goodbye_screen
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    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Thanks for participating the practice.
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  Routine condition_instructions_3
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  Routine condition_feedback_2
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    CodeComponent code_5
      Code Type = Py
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      Begin Routine:
        if tut_count%10!=0:
            continueRoutine = False



        if conditionBlock == 0:
            conditionGame = "Gambling Challenge"
        elif conditionBlock == 1:
            conditionGame = "Choice Challenge"


        if conditionBlock == 1:
           condition_accuracy = round(correct_counter/10*100,2)
           condition_accuracy_full = correct_counter/10*100
           condition_feedback_2_text = f"Your overall accuracy in the {conditionGame} was {condition_accuracy}%."
           thisExp.addData('tut_participant_condition_accuracy', condition_accuracy_full)
        elif conditionBlock == 0 :
           condition_bonus = correct_counter * 0.10

           condition_accuracy = round(correct_counter/10*100,2)
           condition_accuracy_full = correct_counter/10*100
           condition_feedback_2_text = f"Your overall accuracy in the {conditionGame} was {condition_accuracy}%. \nYour overall bonus was {condition_bonus} EUR."
           thisExp.addData('tut_participant_condition_accuracy', condition_accuracy_full)
           thisExp.addData('tut_participant_condition_bonus', condition_bonus)
      Each Frame:
        if trial_counter % 10 == 0:
            condReps = 1 # run
        else:
            condReps = 0 # no run

        if condReps == 0:
            continueRoutine = False
      End Routine:
        if trial_counter % 10 == 0:
            condition_correct_counter = 0
            condition_trial_counter = 0
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $condition_feedback_2_text
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  Routine show_choice_2
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  Routine show_choice_3
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    ImageComponent tut_blockImage_3
      image [set every repeat] = $blockImg
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent tut_stimLeft_3
      image [set every repeat] = $stim1
      pos = (-0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    ImageComponent tut_stimCenter_3
      image [set every repeat] = $stim2
      size = (0.4, 0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    ImageComponent tut_stimRight_3
      image [set every repeat] = $stim3
      pos = (0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    PolygonComponent partChoice
      lineWidth [set every repeat] = 100
      pos [set every repeat] = choicePos
      shape = regular polygon...
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent tut_particYourChoice_2
      letterHeight = 0.05
      pos [set every repeat] = partChoicePos
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      text = Your choice
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    PolygonComponent tut_progress_feedback_3
      fillColor = white
      pos = (0, -0.4)
      shape = rectangle
      size = (0.6, 0.13)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent tut_progress_feedback_text_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $tutprogressText
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Flow
  Routine Welcome
  LoopInitiator condition loopType="TrialHandler"
    conditionsFile = conditionA_fMRI.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'conditionBlock': 0, 'instImg': 'resources/twoeyes.png', 'instText': 'You are in the reward instrumental condition'},
      {'conditionBlock': 1, 'instImg': 'resources/rock.png', 'instText': 'You are in the perceptual instrumental condition'}]
    Routine condition_instructions
    Routine instructions
    LoopInitiator trials_2 loopType="TrialHandler"
      Selected rows = $selected_tutorials
      conditionsFile = tutorials_fmri.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'blockImg': 'resources/shop.png', 'stim1': 'resources/alien_octopus.png', 'stim2': 'resources/alien_tomato.png', 'stim3': 'resources/alien_avocado.png', 'stim1prob': 0.5, 'stim2prob': 0.3, 'stim3prob': 0.1, 'normProb1': 0.5555555555555556, 'normProb2': 0.3333333333333333, 'normProb3': 0.11111111111111112, 'corrAns1': 'stimLeft', 'corrAns2': 'stimCenter', 'corrAns3': 'stimRight', 'oldAlien': 'nochange', 'oldAlienIndex': 'nochange', 'newAlien': 'nochange', 'newAlienIndex': 'nochange', 'sentence': 'nochange'},
        {'blockImg': 'resources/shop.png', 'stim1': 'resources/alien_avocado.png', 'stim2': 'resources/alien_octopus.png', 'stim3': 'resources/alien_tomato.png', 'stim1prob': 0.1, 'stim2prob': 0.5, 'stim3prob': 0.3, 'normProb1': 0.11111111111111113, 'normProb2': 0.5555555555555556, 'normProb3': 0.33333333333333337, 'corrAns1': 'miss', 'corrAns2': 'miss', 'corrAns3': 'miss', 'oldAlien': 'nochange', 'oldAlienIndex': 'nochange', 'newAlien': 'nochange', 'newAlienIndex': 'nochange', 'sentence': 'nochange'},
        {'blockImg': 'resources/shop.png', 'stim1': 'resources/alien_avocado.png', 'stim2': 'resources/alien_tomato.png', 'stim3': 'resources/alien_octopus.png', 'stim1prob': 0.1, 'stim2prob': 0.3, 'stim3prob': 0.5, 'normProb1': 0.11111111111111112, 'normProb2': 0.3333333333333333, 'normProb3': 0.5555555555555556, 'corrAns1': 'miss', 'corrAns2': 'miss', 'corrAns3': 'miss', 'oldAlien': 'nochange', 'oldAlienIndex': 'nochange', 'newAlien': 'nochange', 'newAlienIndex': 'nochange', 'sentence': 'nochange'},
        {'blockImg': 'resources/shop.png', 'stim1': 'resources/alien_tomato.png', 'stim2': 'resources/alien_octopus.png', 'stim3': 'resources/alien_avocado.png', 'stim1prob': 0.3, 'stim2prob': 0.5, 'stim3prob': 0.1, 'normProb1': 0.3333333333333333, 'normProb2': 0.5555555555555556, 'normProb3': 0.11111111111111112, 'corrAns1': 'miss', 'corrAns2': 'miss', 'corrAns3': 'miss', 'oldAlien': 'nochange', 'oldAlienIndex': 'nochange', 'newAlien': 'nochange', 'newAlienIndex': 'nochange', 'sentence': 'nochange'}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
      Routine tutorial
      Routine show_choice_3
      Routine tutorial_feedback
      Routine condition_feedback_2
    LoopTerminator trials_2
  LoopTerminator condition
  Routine goodbye_screen
